PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = brthCounting
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this task, we would like you to be aware of your breath. Please be aware of the movement of breath in and out in the space below your nose and above your upper lip. There’s no need to control the breath. Just breathe normally.
        At some point you may notice your attention has wandered from the breath. That is okay. Just gently place it back on the breath.

        To help attention stay with the breath, you’ll use a small part of your attention to silently count breaths from 1 to 9, again and again. An in and out breath together makes one count. Say the count softly in your mind so it only gets a little attention while most of the attention is on feeling the breath. Please press the <Left Arrow> using your index finger with breaths 1-8, and the <Right Arrow> using your 4th finger with breath 9. This means you’ll be pressing a button with each breath.

        If you find that you have forgotten the count, just press the <SPACE> with your left index finger. You can re- start the count at 1 with the next breath. Do not count the breaths using your fingers but only in your head.

        We suggest you sit in an upright, relaxed posture that feels comfortable. Please keep your eyes at least partly open and resting on the screen during the experiment. The task will last about 20 minutes.

        If you need to quit the experiment for any reason before the task is complete, please press "q" on your keyboard.

        Press the <SPACE> button when you are ready to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      durationEstim = 15
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BreathCounting
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 900
      store = all keys
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 30
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      text:
        You have not pressed a button in a long time.

        Please press space bar to restart your count. At your next breath press <left arrow> and start the count at 1. Keep pressing <left arrow on each breath until you get to 9, when you should press <right arrow>.
    KeyboardComponent key_resp_force_end
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pre_instructions
    TextComponent pre_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for taking part in this study. Before we begin, please ensure that you are in a quiet room and are sitting comfortably in front of your computer. The task will take approximately 20 minutes with no breaks. Please turn off your phone and other notifications on the computer and ask anyone else in the room to ensure that you are not disturbed in the next 20 minutes.
        Press the <SPACE> bar to see the instructions.
    KeyboardComponent pre_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Pre_instructions
  Routine Instructions
  Routine BreathCounting
