PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Effects of Varying Facial Region Visibility on Perception
  logging level = debug
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $target
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = .5
      texture resolution = 512
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    ImageComponent image_1
      image [set every repeat] = $image1
      pos [set every repeat] = [0.2, 0.3]
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 1.7
      texture resolution = 512
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    ImageComponent image_2
      image [set every repeat] = $image2
      pos [set every repeat] = [-0.2,0.3]
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 1.7
      texture resolution = 512
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    ImageComponent image_3
      image [set every repeat] = $image3
      pos [set every repeat] = [0.4,-0.3]
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 1.7
      texture resolution = 512
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    ImageComponent image_4
      image [set every repeat] = $image4
      pos [set every repeat] = [0,-0.3]
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 1.7
      texture resolution = 512
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    ImageComponent image_5
      image [set every repeat] = $image5
      pos [set every repeat] = [-0.4,-0.3]
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 1.7
      texture resolution = 512
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    ImageComponent image_dot
      image = images/fixation.png
      saveStartStop = False
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    MouseComponent resp
      clickable = image_1,image_2,image_3,image_4,image_5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1.7
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  Routine Pre_Virtual_Chin_Rest
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Prior to the experiment you will complete two short pre exercizes.
        (Click anywhere to continue)
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Post_Virtual_Chin_Rest
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the short exercises. Now on to the experiment.
        (Click anywhere to continue)
  Routine Instructions
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please wear the eyeglasses or corrective lenses that you feel are best for this viewing distance.

        (Click anywhere to continue).
  Routine Instructions_2
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For this experiment, we are investigating face perception. On each trial, you will first be shown a single face, and then asked to select that face from within a small set that appears afterwards.



        (Click anywhere to continue).
  Routine Instructions_3
    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Each trial will begin with a black dot in the middle of the screen. Look at the dot: this is the location where the target face will then be shown.



        (Click anywhere to continue).
    ImageComponent image_6
      image [set every repeat] = $target
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine Instructions_4
    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The target face will appear briefly, then automatically replaced with a small set of faces.



        (Click anywhere to continue).
    ImageComponent image_7
      image [set every repeat] = $target
      pos = (0.2, 0)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine Instructions_5
    MouseComponent mouse_7
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Once the small set of faces appears, select the face that matches the identity of the target face you just saw. To make your choice, simply click on the face. Typically, this process takes only one to two seconds, although sometimes it may take longer. The goal is to be accurate in your choice.



        (Click anywhere to continue).
  Routine Instructions_6
    MouseComponent mouse_8
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If for any reason you need a break; feel free to step away when the small set of faces appears before making your choice. To continue the experiment, simply make your choice.



        (Click anywhere to continue).
  Routine Instructions_7
    MouseComponent mouse_9
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If, however, you would like to exit the experiment before it ends, without completing the task, then close the window you are using. This will end the experiment and your data will not be used.



        (Click anywhere to continue).
  Routine Instructions_8
    MouseComponent mouse_10
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Before starting the actual experiment, you will first complete ten practice trials.



        To begin, click anywhere on the screen.
  Routine Pre_Experiment
    MouseComponent mouse_11
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have completed the practice trials.



        Click anywhere on the screen to begin the experiment.
  Routine Debreifing
    MouseComponent mouse_13
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_13
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Debriefing



        Thank you for your participation!

        Facial processing and facial recognition are both necessary for our daily social interactions. With masks becoming a mandatory part of life, the question arises of how they affect the way we see faces. Facial processing can be separated into many different aspects, two being facial memory and facial perception. Recent studies have found that facial memory seems to be significantly affected by masks. This information, however, does not explain masks effect on perception. Facial perception speaks specifically to the initial processes to depict facial properties. These properties include such things as facial features (eyes, mouth, nose), and individualistic spots that vary from person to person. This experiment wanted to investigate perception and how masks may hinder that within a wide range of populations.


        Unlike face memory, we think masks may not hinder facial perception to the extent previously thought. During face perception, people attend mostly to the eye regions of the face. As masks only cover the nose and mouth, it is possible the apparent deficit in face processing may not be due to perception. We hope to answer some of the questions posed, and better understand how masks affect this one aspect of face processing, face perception.

        If you require any further information regarding this research project or your participation in the study, you may contact Jamie Cochrane (cochrj1@mcmaster.ca). If you have any questions about your rights as a research participant or the conduct of this study, you may contact the McMaster Research Ethics Board (MREB) at 905-525-9140, ext. 23142, or email at (srebsec@mcmaster.ca).
Flow
  Routine Pre_Virtual_Chin_Rest
  Routine Post_Virtual_Chin_Rest
  Routine Instructions
  Routine Instructions_2
  LoopInitiator Face1 loopType="TrialHandler"
    conditionsFile = $'image.1.'+condition+'.xlsx'
    loopType = random
    nReps = 1
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    Routine Instructions_3
  LoopTerminator Face1
  LoopInitiator Face2 loopType="TrialHandler"
    conditionsFile = $'image.2.'+condition+'.xlsx'
    loopType = random
    nReps = 1
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    Routine Instructions_4
  LoopTerminator Face2
  Routine Instructions_5
  Routine Instructions_6
  Routine Instructions_7
  Routine Instructions_8
  LoopInitiator LearnUp loopType="TrialHandler"
    conditionsFile = $'Option.Test.Up.'+condition+'.xlsx'
    loopType = fullRandom
    nReps = 1
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    Routine trial
  LoopTerminator LearnUp
  LoopInitiator LearnIn loopType="TrialHandler"
    conditionsFile = $'Option.Test.In.'+condition+'.xlsx'
    loopType = fullRandom
    nReps = 1
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    Routine trial
  LoopTerminator LearnIn
  Routine Pre_Experiment
  LoopInitiator ExperimentUp loopType="TrialHandler"
    conditionsFile = $'Option.Up.'+condition+'.xlsx'
    loopType = fullRandom
    nReps = 20
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    Routine trial
  LoopTerminator ExperimentUp
  LoopInitiator ExperimentIn loopType="TrialHandler"
    conditionsFile = $'Option.In.'+condition+'.xlsx'
    loopType = fullRandom
    nReps = 20
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    Routine trial
  LoopTerminator ExperimentIn
  Routine Debreifing
