PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = black
  expName = XAB_task
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Routines
  Routine WelcomeScreen
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, a face will appear very briefly in the middle of the screen. You will then see two faces, side by side. Your task is to report if the left or right face matches the identity of the face shown previously by pressing the left or right button, respectively.
        Please respond as quickly and as accurately as you can.
        There will be four blocks of trials. At the end of each block, you will be provided with feedback on how accurate you were in that block.

        Press any button to continue.
    KeyboardComponent keyInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Begin
    TextComponent starting_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Starting practice trials.
        Hit escape key to abort experiment.
  Routine PracticeTrials
    ImageComponent faceX_prac
      image [set every repeat] = $face_X
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.25
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    ImageComponent faceA_prac
      image [set every repeat] = $correct_response
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 1
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    ImageComponent faceB_prac
      image [set every repeat] = $correct_response
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 1
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    KeyboardComponent resp_prac
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      syncScreenRefresh = False
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  Routine StartingTrials
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Practice trials completed.
        Starting experimental trials.
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
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  Routine ending
    TextComponent finalBlockResults
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have completed the task.
        In this final block, you were correct on __% of trials.

        Press any button to indicate that you have finished the task.
    KeyboardComponent endTask
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent faceX
      image = faces/male_1_centre_young.png
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.25
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    ImageComponent faceA
      image = faces/male_1_left_4_young.png
      pos = (-0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    ImageComponent faceB
      image = faces/male_1_right_4_young.png
      pos = (0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      syncScreenRefresh = False
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    PolygonComponent fixation
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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  Routine screenAdjustment
    TextComponent checkScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Some text about viewing distance.
        Press any key to continue.
    KeyboardComponent checkScreenResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine leftDemo
    ImageComponent left_face_1
      image = faces/male_1_centre_young.png
      pos = (-0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent right_face_1
      image = faces/male_2_centre_young.png
      pos = (0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent left_demo_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        This is a demonstration to show you how to use the response keys.
        Please press the left arrow on your keyboard to continue.
    KeyboardComponent left_demo_key
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rightDemo
    ImageComponent left_face_2
      image = faces/male_1_centre_young.png
      pos = (-0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent right_face_2
      image = faces/male_2_centre_young.png
      pos = (0.3, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent right_demo_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        This is a demonstration to show you how to use the response keys.
        Please press the right arrow on your keyboard to continue.
    KeyboardComponent right_demo_key_
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startingTrials_del
    TextComponent start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Practice trials completed.
        Starting experimental trials.
  Routine afterPractice
    TextComponent after_practice_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Practice trials completed.
        Starting experimental trials.
  Routine breakScreen
    TextComponent break_screen_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You may want to take a short break at this time.
        In this block, you were correct on __ % of trials.

        Press any button when you are ready to continue.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine screenAdjustment
  Routine WelcomeScreen
  Routine leftDemo
  Routine rightDemo
  Routine Begin
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine trial
      Routine breakScreen
    LoopTerminator trials
    Routine afterPractice
  LoopTerminator blocks
  Routine ending
